<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.1.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>C:\Users\rsh19\Downloads\MS\Pool-8umSi11_neu MS_GA4_01_50030.mzXML</file>
            <file>C:\Users\rsh19\Downloads\MS\Pool-8umSi11_neu MS_GA4_01_50031.mzXML</file>
            <file>C:\Users\rsh19\Downloads\MS\Pool-10um Si11 MS_GA2_01_50172.mzXML</file>
            <file>C:\Users\rsh19\Downloads\MS\Pool-10um Si11 MS_GA2_01_50173.mzXML</file>
            <file>C:\Users\rsh19\Downloads\MS\Pool-10um Si11 MS_GA2_01_50174.mzXML</file>
            <file>C:\Users\rsh19\Downloads\MS\Pool-4umSi11_neu MS_GA3_01_50025.mzXML</file>
            <file>C:\Users\rsh19\Downloads\MS\Pool-4umSi11_neu MS_GA3_01_50026.mzXML</file>
            <file>C:\Users\rsh19\Downloads\MS\Pool-4umSi11_neu MS_GA3_01_50027.mzXML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">5.0</parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">5.0</parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.5</min>
                <max>60.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">800.0</parameter>
        <parameter name="Minimum absolute height">1000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
            <module name="Savitzky Golay">
                <parameter name="Retention time smoothing" selected="true">5</parameter>
                <parameter name="Mobility smoothing" selected="false">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</parameter>
            </module>
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.1</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.1</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">1000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.6</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>3.01</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.08</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.004</absolutetolerance>
            <ppmtolerance>8.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.4</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak</parameter>
        <parameter name="Minimum aligned features (samples)" selected="true">
            <abs>3</abs>
            <rel>0.5</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.4</parameter>
        <parameter name="Minimum scans (data points)">2</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>7.5E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.07</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.111999996</parameter>
        <parameter name="Minimum feature height">0.0</parameter>
        <parameter name="Intensity threshold for correlation">5.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>3</abs>
                <rel>0.5</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
        <parameter name="Advanced" selected="true">
            <parameter name="Keep extended stats">false</parameter>
            <parameter name="Simplify for ≥ samples">250</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ALL FEATURES</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="34.969401" mol_formula="Cl" name="Cl" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="44.99820285" mol_formula="HCO2" name="FA" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_localcsvsearch.LocalCSVDatabaseSearchModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Database file">
            <current_file>C:\Users\rsh19\Downloads\newMix_targetlist.csv</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Columns">
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            <importtype column="formula" datatype="io.github.mzmine.datamodel.features.types.annotations.formula.FormulaType" selected="true"/>
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            <importtype column="name" datatype="io.github.mzmine.datamodel.features.types.annotations.CompoundNameType" selected="true"/>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.004</absolutetolerance>
            <ppmtolerance>8.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.4</parameter>
        <parameter name="Mobility time tolerance">0.01</parameter>
        <parameter name="CCS tolerance (%)">0.05</parameter>
        <parameter name="Use isotope matcher" selected="false">
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        </parameter>
        <parameter name="Use adducts" selected="true">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="34.969401" mol_formula="Cl" name="Cl" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="44.99820285" mol_formula="HCO2" name="FA" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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            </parameter>
        </parameter>
        <parameter name="Filter filename header" selected="false"/>
        <parameter name="Append comment fields"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_lipidid.annotation_modules.LipidAnnotationModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Lipid classes">
            <item>Fatty Acyls</item>
            <item>Fatty acids and Conjugates</item>
            <item>FA Free fatty acids</item>
            <item>FA Oxidized fatty acids</item>
            <item>Fatty esters</item>
            <item>FAHFA Fatty acid estolides</item>
            <item>CAR Fatty acyl carnitines</item>
            <item>Fatty amides</item>
            <item>NA N-Acyl glycine</item>
            <item>Glycerolipids</item>
            <item>Monoradylglycerols</item>
            <item>MG Monoacylglycerols</item>
            <item>MG Monoalkylglycerols</item>
            <item>Diradylglycerols</item>
            <item>DG Diacylglycerols</item>
            <item>DG Alkylacylglycerols</item>
            <item>DG Dialkylglycerols</item>
            <item>Triradylglycerols</item>
            <item>TG Triacylglycerols</item>
            <item>TG Alkyldiacylglycerols</item>
            <item>Other glycerolipids</item>
            <item>DGTS Diacylglyceroltrimethylhomoserin</item>
            <item>LDGTS Monoacylglyceroltrimethylhomoserin</item>
            <item>Glycosyldiacylglycerols</item>
            <item>MGDG Monogalactosyldiacylglycerol</item>
            <item>MGMG Monogalactosylmonoacylglycerol</item>
            <item>DGDG Digalactosyldiacylglycerol</item>
            <item>SQDG Sulfoquinovosyldiacylglycerols</item>
            <item>Glycosylmonoacylglycerols</item>
            <item>SQMG Sulfoquinovosylmonoacylglycerols</item>
            <item>Glycerophospholipids</item>
            <item>Phosphatidylcholine</item>
            <item>PC Diacylglycerophosphocholines</item>
            <item>PC Alkylacylglycerophosphocholines</item>
            <item>PC Dialkylglycerophosphocholines</item>
            <item>LPC Monoacylglycerophosphocholines</item>
            <item>LPC Monoalkylglycerophosphocholines</item>
            <item>Glycerophosphoethanolamines</item>
            <item>PE Diacylglycerophosphoethanolamines</item>
            <item>PE Alkylacylglycerophosphoethanolamines</item>
            <item>PE Dialkylglycerophosphoethanolamines</item>
            <item>LPE Monoacylglycerophosphoethanolamines</item>
            <item>LPE Monoalkylglycerophosphoethanolamines</item>
            <item>LNAPE N-acyl-lysophosphatidylethanolamine</item>
            <item>Glycerophosphoserines</item>
            <item>PS Diacylglycerophosphoserines</item>
            <item>PS Alkylacylglycerophosphoserines</item>
            <item>LPS Monoacylglycerophosphoserines</item>
            <item>LPS Monoalkylglycerophosphoserines</item>
            <item>Glycerophosphoglycerols</item>
            <item>PG Diacylglycerophosphoglycerols</item>
            <item>PG Alkylacylglycerophosphoglycerols</item>
            <item>PG Dialkylglycerophosphoglycerols</item>
            <item>LPG Monoacylglycerophosphoglycerols</item>
            <item>LPG Monoalkylglycerophosphoglycerols</item>
            <item>BMP Monoacylglycerophosphomonoradylglycerols</item>
            <item>Glycerophosphoinositols</item>
            <item>PI Diacylglycerophosphoinositols</item>
            <item>PI Alkylacylglycerophosphoinositols</item>
            <item>PI Dialkylglycerophosphoinositols</item>
            <item>LPI Monoacylglycerophosphoinositols</item>
            <item>LPI Monoalkylglycerophosphoinositols</item>
            <item>Glycerophosphates</item>
            <item>PA Diacylglycerophosphates</item>
            <item>PA Alkylacylglycerophosphates</item>
            <item>LPA Monoacylglycerophosphates</item>
            <item>LPA Monoalkylglycerophosphates</item>
            <item>Cardiolipin</item>
            <item>CL Diacylglycerophosphoglycerophosphodiradylglycerols</item>
            <item>MLCL Diacylglycerophosphoglycerophosphomonoradylglycerols</item>
            <item>DLCL Monoacylglycerophosphoglycerophosphomonoradylglycerols</item>
            <item>Sphingolipids</item>
            <item>Sphingoid bases</item>
            <item>SPB Sphingosines and Sphinganines</item>
            <item>SPB Phytosphingosines and Phytosphinganines</item>
            <item>Ceramides</item>
            <item>Cer Ceramides and dihydroceramides hydroxy fatty acid</item>
            <item>CerP Ceramide-1-phosphates</item>
            <item>Cer N-acyl-4-hydroxysphinganines (phytoceramides)</item>
            <item>Cer N-acylsphingosines (ceramides) and N-acylsphinganines (dihydroceramides)</item>
            <item>Cer Phytoceramides hydroxy fatty acid</item>
            <item>Neutral glycosphingolipids</item>
            <item>Hex2Cer Dihexosylceramides</item>
            <item>Hex3Cer Trihexosylceramides</item>
            <item>HexCer Hexosylceramides</item>
            <item>HexCer Hexosylceramide hydroxy fatty acid</item>
            <item>HexCer Hexosylceramide hydroxy fatty acid phytosphingosine</item>
            <item>Phosphosphingolipids</item>
            <item>SM Ceramide Phosphocholines (Sphingomyelins)</item>
            <item>SM Oxidized Ceramide Phosphocholines (Sphingomyelins)</item>
            <item>Sterol Lipids</item>
            <item>Sterols</item>
            <item>CE Cholesterol esters</item>
        </parameter>
        <parameter name="Side chain parameters">
            <parameter name="Minimum chain length">12</parameter>
            <parameter name="Maximum chain length">26</parameter>
            <parameter name="Minimum number of DBEs">0</parameter>
            <parameter name="Maximum number of DBEs">6</parameter>
            <parameter name="Only search for even chain length">false</parameter>
        </parameter>
        <parameter name="m/z tolerance MS1 level:">
            <absolutetolerance>0.004</absolutetolerance>
            <ppmtolerance>8.0</ppmtolerance>
        </parameter>
        <parameter name="Search for lipid class specific fragments in MS/MS spectra" selected="true">
            <parameter name="m/z tolerance MS2 level:">
                <absolutetolerance>0.005</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Explained intensity [%]:">0.6</parameter>
            <parameter name="Keep unconfirmed annotations">false</parameter>
        </parameter>
        <parameter name="Search for custom lipid class" selected="false">
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_spectral_networking.SpectralNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (MS2)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Only best MS2 scan">true</parameter>
        <parameter name="Max precursor m/z delta" selected="true">500.0</parameter>
        <parameter name="Minimum matched signals">4</parameter>
        <parameter name="Min cosine similarity">0.7</parameter>
        <parameter name="Check MS2 neutral loss similarity" selected="false">
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        </parameter>
        <parameter name="Signal filters">
            <parameter name="Remove residual precursor m/z" selected="true">10.0</parameter>
            <parameter name="Crop to top N signals">250</parameter>
            <parameter name="Signal threshold (intensity filter)">50</parameter>
            <parameter name="Intensity filter at &gt;N signals">0.98</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_network_graphml.NetworkGraphMlExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\Users\rsh19\Downloads\mzmine_low_uM_export\first_run_mzmine_networking.graphml</current_file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\Users\rsh19\Downloads\mzmine_low_uM_export\first_run_iimn_gnps</current_file>
        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\Users\rsh19\Downloads\mzmine_low_uM_export\first_run_sirius.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="false">
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\Users\rsh19\Downloads\mzmine_low_uM_export\first_run_annotations.csv</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv_legacy.LegacyCSVExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\Users\rsh19\Downloads\mzmine_low_uM_export\mzmine2_export_FT.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export correlation group ID</item>
            <item>Export row ID</item>
            <item>Export row identity (all IDs)</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak area</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
